// Une macro-squelette pour la couleur.
// Version: 0.1
// Date: 14/09/2011
// Author: L. Macaire

macro "augmentation_teinte" {

// r�cup�ration du ID de l'image
image = getImageID();

Dialog.create("Debut");
Dialog.addMessage(" Cliquer sur OK pour commencer le traitement ");
Dialog.show();


setBatchMode(true);


// r�cup�ration de la taille W x H du plan de fourier
W = getWidth();
H = getHeight();

//dusplication de l'image
run("Duplicate...", "title=saturation");
image_saturation_aug = getImageID();

//changement d'espace colorimetrique
run("Color Space Converter", "from=RGB to=HSB white=D65");

//split des canaux
run("Split Channels");

//traitement sur les image
selectWindow("saturation (HSB) (red)");
run("Add...", "value="+90);

//merge des canaux
run("Merge Channels...", "red=[saturation (HSB) (red)] green=[saturation (HSB) (green)] blue=[saturation (HSB) (blue)] gray=*None* keep ignore");

//changement d'espace colorimetrique
run("Color Space Converter", "from=HSB to=RGB white=D65");

setBatchMode(false);

Dialog.create("Fin");
Dialog.addMessage(" Cliquer sur OK pour terminer le traitement");
Dialog.show();


}
